'CR1000 Series Datalogger
'Datalogger program to simultaneously read SL-510, SL-610, SP-510, and SP-610 from a single datalogger.
'Based on example programs from Apogee.
'Date: January 2, 2023
'Program author: Jacob Bingham, Tim Player

'Constants for calibration coefficients and wiring locations
'Edit these whenever changing instruments or wiring locations

'SL-510 (upward-facing pyrgeometer) ----------------------------------------
'Serial Number SL-510-SS_1314

'Thermopile coefficients from Apogee calibration certificate
Const SL510_k1 = 9.707
Const SL510_k2 = 1.052

'Wiring locations
Const SL510_Thermopile_DF_Chan = 1 'Differential channel
Const SL510_Thermistor_SE_Chan = 3 'Single-ended thermistor channel
Const SL510_Thermistor_EXC = 1 'Thermistor excitation channel
'Also connect analog ground, shield/ground, and 12V heater

'SL-610 (downward-facing pyrgeometer) ----------------------------------------
'Serial Number SL-610-SS_1338

'Thermopile coefficients from Apogee calibration certificate
Const SL610_k1 = 9.839
Const SL610_k2 = 1.063

'Wiring locations
Const SL610_Thermopile_DF_Chan = 3 'Differential channel
Const SL610_Thermistor_SE_Chan = 4 'Single-ended thermistor channel
Const SL610_Thermistor_EXC = 1 'Thermistor excitation channel
'Also connect analog ground, shield/ground, and 12V heater

'SP-510 (upward-facing pyranometer) ----------------------------------------
'Srial Number SP-510-SS_2985

'Calibration coefficient from Apogee calibration certificate
Const SP510_CF = 23.24 'sensor specific (see calibration certificate)

'Wiring locations
Const SP510_SE_Chan = 7 'Single-ended channel
'Also connect shield and negative signal to ground

'SP-610 (downward-facing pyranometer) ----------------------------------------
'Serial Number SP-610-SS_1479

'Calibration coefficient from Apogee calibration certificate
Const SP610_CF = 30.55 'sensor specific (see calibration certificate)

'Wiring locations
Const SP610_SE_Chan = 8 'Single-ended channel
'Also connect shield and negative signal to ground

'############# Implementation ##############################################
'Explanation of Constants and Variables Used in Datalogger Program
'BattV = datalogger battery voltage
'PanelT = datalogger panel temperature
'Pyrg_mV = voltage signal from pyrgeometer detector
'Pyrg_SBTemp_C = calculated sensor body temperature in degrees Celcius
'Rt = resistance of thermistor for measuring sensor body temperature
'ST_Rat = ratio of measured voltage to excitation voltage from half bridge measurement
'Pyrg_LWi = emitted longwave radiation in W m-2 (watts per square meter)

'Declare public variables
Public BattV, PanelT
Public SL510_mV
Public SL510_SBTemp_C
Public SL510_LWi
Public SL510_Rt, SL510_ST_Rat 'TODO change to Dim

Public SL610_mV
Public SL610_SBTemp_C
Public SL610_LWo
Public SL610_Rt, SL610_ST_Rat 'TODO change to Dim

Public SP510_SWi
Public SP610_SWo

'Stefan-Boltzmann constant
Const Sigma = 0.000000056704

'Thermistor coefficients from Apogee manual
'https://www.apogeeinstruments.com/content/SL-510-610-manual.pdf
Const A_Below0 = 0.000932960
Const B_Below0 = 0.000221424
Const C_Below0 = 0.000000126329
Const A_Above0 = 0.000932794
Const B_Above0 = 0.000221451
Const C_Above0 = 0.000000126233

Const Pyrg_HBridge_R = 24900 'Resistance of thermistor h-bridge resistor

'Define Data Tables
DataTable (Longwave,1,-1)
	DataInterval (0,1,Min,10)
	Minimum(1,BattV,IEEE4,0,False)
	Sample(1,PanelT,IEEE4)
  Average(1,SL510_LWi,IEEE4,False)
  Average(1,SL610_LWo,IEEE4,False)
EndTable

DataTable (Solar,1,-1)
	DataInterval (0,1,Min,10)
	Minimum(1,BattV,IEEE4,0,False)
	Sample(1,PanelT,IEEE4)
	Average(1,SP510_SWi,IEEE4,False)
	Average (1,SP610_SWo,IEEE4,False)
EndTable

'Main Program
BeginProg
	Scan(1,Sec,0,0)
		Battery(BattV)
		PanelTemp(PanelT,_60Hz)
		
      'SL-510 upward-facing pyrgeometer ------------------------------------
      'Measure incoming longwave radiation on a differential channel
      VoltDiff (SL510_mV,1,AutoRange,SL510_Thermopile_DF_Chan,True,0,_60Hz,1.0,0)
      'Measure sensor body temperature using half bridge measurement
      BrHalf (SL510_ST_Rat,1,mV2500,SL510_Thermistor_SE_Chan,SL510_Thermistor_EXC,1,2500,True,0,_60Hz,1,0)
      'Calculate resistance of pyrgeometer thermistor
      SL510_Rt = Pyrg_HBridge_R * (SL510_ST_Rat / (1 - SL510_ST_Rat))
      
      'Use appropriate thermistor coefficients depending on calculated resistance
      If SL510_Rt > 94980 Then 'Resistance value at 0 C
      SL510_SBTemp_C = (1 / (A_Below0 + (B_Below0 * LN(SL510_Rt)) + (C_Below0 * (LN(SL510_Rt))^3))) - 273.15
			Else
		  SL510_SBTemp_C = (1 / (A_Above0 + (B_Above0 * LN(SL510_Rt)) + (C_Above0 * (LN(SL510_Rt))^3))) - 273.15
			EndIf
      
      'Calculate emitted longwave radiation in units of W m-2
      SL510_LWi = SL510_k1 * SL510_mV + SL510_k2 * Sigma * (SL510_SBTemp_C + 273.15) ^ 4
      
      'SL-610 downward-facing pyrgeometer ------------------------------------
      'Measure incoming longwave radiation on a differential channel
      VoltDiff (SL610_mV,1,AutoRange,SL610_Thermopile_DF_Chan,True,0,_60Hz,1.0,0)
      'Measure sensor body temperature using half bridge measurement
      BrHalf (SL610_ST_Rat,1,mV2500,SL610_Thermistor_SE_Chan,SL610_Thermistor_EXC,1,2500,True,0,_60Hz,1,0)
      'Calculate resistance of pyrgeometer thermistor
      SL610_Rt = Pyrg_HBridge_R * (SL610_ST_Rat / (1 - SL610_ST_Rat))
      
      'Use appropriate thermistor coefficients depending on calculated resistance
      If SL610_Rt > 94980 Then 'Resistance value at 0 C
      SL610_SBTemp_C = (1 / (A_Below0 + (B_Below0 * LN(SL610_Rt)) + (C_Below0 * (LN(SL610_Rt))^3))) - 273.15
			Else
		  SL610_SBTemp_C = (1 / (A_Above0 + (B_Above0 * LN(SL610_Rt)) + (C_Above0 * (LN(SL610_Rt))^3))) - 273.15
			EndIf
      
      'Calculate emitted longwave radiation in units of W m-2
      SL610_LWo = SL610_k1 * SL610_mV + SL610_k2 * Sigma * (SL610_SBTemp_C + 273.15) ^ 4

    'SP-510 upward-facing pyranometer -----------------------------------------
    'Measure incoming global shortwave radiation (SP510_SWi) on a differential channel 
    '(can also be measured on a single-ended channel)
     VoltSe(SP510_SWi,1,mV250,SP510_SE_Chan,True,0,_60Hz,SP510_CF,0)

    'SP-510 upward-facing pyranometer -----------------------------------------
    'Measurereflected shortwave radiation (SP610_SWo) on a differential channel 
    '(can also be measured on a single-ended channel)
     VoltSe(SP610_SWo,1,mV250,SP610_SE_Chan,True,0,_60Hz,SP610_CF,0)

    'Call Output Tables
		CallTable Longwave
    CallTable Solar
	NextScan
EndProg
